#  Example Qudi configuration file.
#  The recommended path for user specific files is C:\Users\<user_name>\qudi\config

global:
    # list of modules to load when starting
    startup_modules: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: 'localhost'
        port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

gui:
    qutag_gui:
        module.Class: 'qutag.qutag_gui.QuTagGUI'
        connect: 
            qtlogic: 'qutagLogic'


    pi_piezo_stage_gui:
        module.Class: 'Piezo.piezogui.PiezoGUI'
        connect: 
            apt_logic: 'pi_logic'

    polargui:
        module.Class: 'polarization_motor.polarization_motor_gui.PolarMotordGUI'
        connect: 
            polar_logic: 'polarmotorlogic'

    galvogui:
        module.Class: 'galvo.galvogui.GalvoGUI'
        connect:
            galvo_logic: 'galvo'
            
    scanner_gui:
        module.Class: 'scanner.scannergui.ScannerGui'
        options:
            image_axes_padding: 0.02
            resolution_step_size: nm # nm for step size, px for resolution, default to be nm
            default_position_unit_prefix: null  # optional, use unit prefix characters, e.g. 'u' or 'n'
            default1: [50e-6, 50e-6, 1e-6]   # um x um - nm
            default2: [30e-6,  30e-6,  150e-9]
            default3: [10e-6,  10e-6,  50e-9]
        connect:
            scanning_logic: scanning_probe_logic
            data_logic: scanning_data_logic
            optimize_logic: scanning_optimize_logic
            galvo_logic: galvo

    lasergui:
        module.Class: 'ltune_laser.ltunelasergui.LtuneLaserGUI'
        connect:
            ltune_laser_logic: 'ltune_laserlogic'

    camera_gui:
        module.Class: 'camera.cameragui.CameraGui'
        connect:
            camera_logic: camera_logic

    pmgui:
        module.Class: 'powermeter.powermetergui.PowerMeterGUI'
        connect: 
            pmlogic: 'powermeterLogic'

    piezogui:
        module.Class: 'Piezo.piezogui.PiezoGUI'
        connect: 
            apt_logic: 'aptLogic'

    daqcount_gui:
        module.Class: 'daq_counter.daqcounter_gui.DAQCounterGUI'
        connect:
            daq_counter_1: 'daqcounter1'
            daq_counter_2: 'daqcounter2'

    stepper_motor:
        module.Class: 'stepper_motor.stepper_motor_gui.StepperGUI'
        connect:
            stepper_logic: 'stepperlogic'

    flippergui:
        module.Class: 'flippermirror.flippermirror_gui.FlipperGUI'
        connect:
            flipperlogic: 'flipLogic'

    manual_LAC:
        module.Class: 'manualLAC.manualLAC.ManualLACGUI'
        connect:
            laclogic: 'LAClogic'
    
    LAC_PID: 
        module.Class: 'LAC_PID.LAC_PID_gui.LACPIDGUI'
        connect:
            pmlogic: 'powermeterLogic'
            pidlogic: 'pidlogic'
            laclogic: 'LAClogic'

logic:
    qutagLogic:
        module.Class: 'qutag_logic.QuTagLogic'
        connect:
            qutag: "qutag"

    pi_logic:
        module.Class: 'PI_piezo_logic.PIpiezoLogic'
        connect:
            pi_piezo: 'pi_piezo'

    polarmotorlogic:
        module.Class: 'polarization_motor_logic.PolarMotorLogic'
        connect:
            pmotor: 'polarmotor'

    galvo:
        module.Class: 'galvo_logic.GalvoLogic'
        connect:
            galvoInterfuse: 'galvo_interfuse'

    scanning_probe_logic:
        module.Class: 'scanning_probe_logic.ScanningProbeLogic'
        options:
            max_history_length: 20
            max_scan_update_interval: 2
            position_update_interval: 1
        connect:
            scanner: Ozymandias_scanner

    scanning_data_logic:
        module.Class: 'scanning_data_logic.ScanningDataLogic'
        options:
            max_history_length: 20
        connect:
            scan_logic: scanning_probe_logic

    scanning_optimize_logic:
        module.Class: 'scanning_optimize_logic.ScanningOptimizeLogic'
        connect:
            scan_logic: scanning_probe_logic

    ltune_laserlogic:
        module.Class: 'ltune_laser_logic.LtuneLaserLogic'
        connect:
            purdue_laser: purdue_laser

    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            camera: camera
            # savelogic: 'savelogic'
            # fliplogic: 'flipLogic'

    powermeterLogic:
        module.Class: 'powermeter_logic.PowerMeterLogic'
        connect:
            powerMeter: 'powermeter'

    pidlogic:
        module.Class: 'modified_PID.ModPIDController'
        connect:
            process: 'powermeter'
            control: 'LAC'

    LAClogic:
        module.Class: 'LAC_logic.LACLogic'
        connect:
            LACmotor: 'LAC'

    aptLogic:
        module.Class: 'APTpiezo_logic.APTpiezoLogic'
        connect:
            apt_piezo_1: 'piezo1'
            apt_piezo_2: 'piezo2'

    daqcounter1:
        module.Class: 'daq_counter.DaqCounter'
        options:
            counter_channel: '0'
        connect:
            daq: 'DAQ'

    daqcounter2:
        module.Class: 'daq_counter.DaqCounter'
        options:
            counter_channel: '1'
        connect:
            daq: 'DAQ'

    stepperlogic:
        module.Class: 'stepper_motor_logic.StepperMotorLogic'
        options:
            com_port: 'COM11'
        connect: 
            stepper_motor_1: 'steppermotor1'
            stepper_motor_2: 'steppermotor2'

    flipLogic:
        module.Class: 'flipper_mirror_logic.FlipperMirrorLogic'
        connect:
            flipper1: 'spectrometer_flipper'
            flipper2: 'camera_flipper'
            shutterFlipper: 'shutter_flipper'

hardware:
    opm_Ozymandias:
        module.Class: 'OPM.OPM_Ozymandias.OpmOzymandias'
        connect:
            galvo: 'galvo_interfuse'
            spectrometer_flipper: 'spectrometer_flipper'
            camera_flipper: 'camera_flipper'
            shutterFlipper: 'shutter_flipper'
            
    qutag:
        module.Class: 'qutag.qutag.Qutag'

    polarmotor:
        module.Class: 'motor.polarization_motor.PolarizationMotor'
        options:
            deviceID: '27262347'
            maxvelocity: 100

    galvo_piezo_interfuse:
        module.Class: "interfuse.galvo_piezo_interfuse.GalvoPiezoInterfuse"
        connect:
            galvo: 'galvo_interfuse'
            piezo: 'piezo2'

    galvo_interfuse:
        module.Class: "interfuse.galvo_interfuse.GalvoInterfuse"
        connect:
            daq: 'DAQ'

    Ozymandias_scanner:
        module.Class: 'interfuse.Ozymandias_scanning_probe_interfuse.OzymandiasScanningProbeInterfuse'
        connect:
            stage: 'pi_piezo'
            counter: "qutag"
            OPM: "opm_Ozymandias"
        options:
            position_ranges: # in m
                x: [0, 101e-6]
                y: [0, 101e-6]
                z: [0, 101e-6]
            frequency_ranges: #Aka values written/retrieved per second; Check with connected HW for sensible constraints.
                x: [1, 5000]
                y: [1, 5000]
                z: [1, 1000]
            resolution_ranges:
                x: [1, 10000]
                y: [1, 10000]
                z: [1, 10000]
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                SUM: "c/s"
            move_velocity: 400e-6 #m/s; This speed is used for scanner movements and avoids jumps from position to position.
            
    scanner_dummy:
        module.Class: 'dummy.scanning_probe_dummy.ScanningProbeDummy'
        options:
            position_ranges:
                'x': [0, 200e-6]
                'y': [0, 200e-6]
                'z': [0 20e-6]
            frequency_ranges:
                'x': [0, 10000]
                'y': [0, 10000]
                'z': [0, 5000]
            resolution_ranges:
                'x': [2, 2147483647]
                'y': [2, 2147483647]
                'z': [2, 2147483647]
            position_accuracy:
                'x': 10e-9
                'y': 10e-9
                'z': 50e-9
            spot_density: 1e11

    purdue_laser:
        module.Class: 'laser.ltune_laser.LtuneLaser'
        options:
            deviceID: '080983'

    camera:
        module.Class: 'camera.DCC1545MCamera.DCC1545M.DCC1545M'

    powermeter:
        module.Class: 'powermeter.TLPMpowermeter.PowerMeter'
        options:
            address: 'USB0::0x1313::0x807B::16072030::INSTR'
            multiplicationFactor: 90.3
            wavelength: 532

    piezo1:
        module.Class: 'Piezo.APTpiezo.APTPiezo'
        options:
            deviceID: '0'
   
    piezo2:
        module.Class: 'Piezo.APTpiezo.APTPiezo'
        options:
            is_second_piezo: True
            deviceID: '31808608'

    pi_piezo:
        module.Class: "Piezo.PI_Piezo_Stage.PI_Piezo_Stage"
        options:
            piezo_controller_type: "E-727"
            serial_number: "0123020467"
            axis_mapping:
                "x": "1"
                "y": "3"
                "z": "2"
    DAQ:
        module.Class: 'DAQ.DAQ'
        options:
            range: 'BIP10VOLTS'
            mode: 'single_ended'

    steppermotor1:
        module.Class: 'motor.stepper_motor.StepperMotor'
        options:
            motor_pin_1: 2
            motor_pin_2: 3
            motor_pin_3: 4
            motor_pin_4: 5

    steppermotor2:
        module.Class: 'motor.stepper_motor.StepperMotor'
        options:
            motor_pin_1: 8
            motor_pin_2: 9
            motor_pin_3: 10
            motor_pin_4: 11

    spectrometer_flipper:
        module.Class: 'flipper_mirror.flipper_mirror.FlipperMirror'
        options:
            deviceID: '37005466'

    camera_flipper:
        module.Class: 'flipper_mirror.flipper_mirror.FlipperMirror'
        options:
            deviceID: '37005411'

    shutter_flipper:
        module.Class: 'flipper_mirror.shutter_flipper.ShutterFlipper'
        options:
            com_port: 'COM13'
            motor_pin_1: 2
            motor_pin_2: 3
            motor_pin_3: 4
            motor_pin_4: 5

    LAC:
        module.Class: 'motor.LAC_hardware.LACHardware'
